PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = InterleavedStaircase
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please evaluate the differences in realism between the two scenes. Each comparison will last 5 seconds and then you will be required to:

        Press  ‘left’  if you think the stimulus on the left was more realistic

        Press  ‘right’ if you think the stimulus on the right was more realistic

        Press any key to start
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine set_condition
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        imageSet = imageSetLvl;
        imageSetStr = imageSet.toString();
        setName = imageSetName;
        nRefImage = refSetNumber;

        initStep = (nRefImage * 2);

        noOfMiniScenes  = 3;

        reversals = 0;
        trialCounter = 1;

        reversalsSharp = 0;
        reversalsFlat =  0;



        levList = new Array(2);
        respList = new Array(2);
        kestList = new Array(2);
        reverseList = new Array(2);
        localTrialNo = new Array(2);


        globalTrialNo = 60;
        maxNoFlat = globalTrialNo/(noOfMiniScenes * 2);


        for(var i = 0; i < levList.length; i++)
        {
            levList[i]= new Array(noOfMiniScenes + 2);
            respList[i] = new Array(noOfMiniScenes + 2);
            kestList[i] = new Array(noOfMiniScenes + 2);
            reverseList[i] = new Array(noOfMiniScenes + 2);
            localTrialNo[i] = new Array(noOfMiniScenes + 2);
            for(var j = 1; j <= noOfMiniScenes + 2; j++)
            {
                levList[i][j]= new Array(100).fill(0);
                respList[i][j] = new Array(100).fill(0);
                kestList[i][j] = new Array(100).fill(0);
                reverseList[i][j] = new Array(100).fill(0);
                localTrialNo[i][j] = 1;
            }

        }

        leftImage = new Image();
        rightImage = new Image();


        images1 = new Array();
        images2 = new Array();
        images3 = new Array();

        function preload(images, set) {
            for (var i = 0; i < 22; i++) {
                images[i] = new Image();
                images[i].src = `stimuli/${imageSetStr}/${set}/${i}_${setName}.png`;
            }
        }

        preload(images1, 1);
        preload(images2, 2);
        preload(images3, 3);
      Begin Routine:
        imageSet = imageSetLvl
        imageSetStr = str(imageSet)
        setName = imageSetName
        nRefImage = refSetNumber

        initStep = (nRefImage)

        noOfMiniScenes  = 3

        reversals = 0
        trialCounter = 1

        reversalsSharp = 0
        reversalsFlat =  0



        levList = [0] * 2
        respList = [0] * 2
        kestList = [0] * 2
        reverseList = [0] * 2
        localTrialNo = [0] * 2
        staircaseTrialNo = [1] * 2

        for i in range(2):
            levList[i] = [0] * (noOfMiniScenes + 2)
            respList[i] = [0] * (noOfMiniScenes + 2)
            kestList[i] = [0] * (noOfMiniScenes + 2)
            reverseList[i] = [0] * (noOfMiniScenes + 2)
            localTrialNo[i] = [0] * (noOfMiniScenes + 2)
            for j in range(noOfMiniScenes + 2):
                levList[i][j] = [0] * 100
                respList[i][j] = [0] * 100
                kestList[i][j] = [0] * 100
                reverseList[i][j] = [0] * 100
                localTrialNo[i][j] = 1




        globalTrialNo = 60
        maxNoFlat = globalTrialNo/(noOfMiniScenes * 2)
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Loading...
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  Routine trial
    CodeComponent kesten_stair
      Code Type = Both
      Begin JS Routine:
        staircase = 0;

        currentScene = Math.floor(Math.random() * noOfMiniScenes) + 1;
        currentStaircase = Math.random();



        if(trialCounter <= globalTrialNo/2)
        {
        //if ((Math.random() > 0.5)) {
            phi = 0.25;
            initN = (nRefImage * 3);
            staircase = 0;
            if(localTrialNo[staircase][currentScene] > maxNoFlat){
                for(var i = 1; i <= noOfMiniScenes; i++){
                    if(localTrialNo[staircase][i] <= maxNoFlat){
                        currentScene = i;}
                       }
                 }

        }
        else {
        //if  ((Math.random() <= 0.5)){
            phi = 0.75;
            initN = 0;
            staircase = 1;
            if(localTrialNo[staircase][currentScene] > maxNoFlat){
                for(var i = 1; i <= noOfMiniScenes; i++){
                    if(localTrialNo[staircase][i] <= maxNoFlat){
                        currentScene = i;}
                        }
                     }
        }


        images = []
        if (currentScene == 1)
        {
            images = images1;
        }
        else if (currentScene == 2)
        {
            images = images2;
        }
        else if (currentScene == 3)
        {
            images = images3;
        }



        trial = localTrialNo[staircase][currentScene];

        if ((Math.random() > 0.5)) {
            refSide = 1;
        } else {
            refSide = (- 1);
        }
        compSide = (refSide * (- 1));
        stairFactor = true;
        //if(staircase == 1){
        //    stairFactor = -1;}
        if ((trial === 1)) {
            levList[staircase][currentScene][trial] = initN;
        } else
        {
            if ((trial === 2))
            {
                levList[staircase][currentScene][trial] = initN - ((initStep / 2) * (kestList[staircase][currentScene][(trial - 1)] - phi));
            }
            else
            {
                levList[staircase][currentScene][trial] = levList[staircase][currentScene][(trial - 1)] - ((initStep / (reversals + 2)) * (kestList[staircase][currentScene][(trial - 1)] - phi));
            }
        }
        console.log("Trial is: " + trial);
        console.log("Level before is: " + levList[staircase][currentScene][trial]);
        if(staircase == 0)
        {
            if ((levList[staircase][currentScene][trial] > initN)) {
                levList[staircase][currentScene][trial] = initN;
            }

            if ((levList[staircase][currentScene][trial] < 0)) {
                levList[staircase][currentScene][trial] = 0;
            }
        }
        else
        {
            if ((levList[staircase][currentScene][trial] < initN)) {
                levList[staircase][currentScene][trial] = initN;
            }
            if ((levList[staircase][currentScene][trial] < 0)) {
                levList[staircase][currentScene][trial] = 0;
            }
        }
        console.log("Level after is: " + levList[staircase][currentScene][trial]);

        nCompQuality = Number.parseInt(round(levList[staircase][currentScene][trial]));
        comp_num = nCompQuality;


        if ((refSide === (- 1))) {
            leftImage = images[nRefImage];
            rightImage = images[comp_num];
        } else {
            leftImage = images[comp_num];
            rightImage = images[nRefImage];
        }
      Begin Routine:
        images1 = [f'stimuli/{imageSetStr}/1/{i}_{imageSetName}.png' for i in range(22)]
        images2 = [f'stimuli/{imageSetStr}/2/{i}_{imageSetName}.png' for i in range(22)]
        images3 = [f'stimuli/{imageSetStr}/3/{i}_{imageSetName}.png' for i in range(22)]

        currentScene = int(random() * noOfMiniScenes) + 1
        staircase = round(random())

        if staircase == 0 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 1
        if staircase == 1 and staircaseTrialNo[staircase] > globalTrialNo/2:
            staircase = 0

        if trialCounter <= globalTrialNo:
            if staircase == 0:
                    phi = 0.25
                    initN = nRefImage * 3
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1
            else:
                    phi = 0.75
                    initN = 0
                    staircaseTrialNo[staircase] += 1
                    if localTrialNo[staircase][currentScene] > maxNoFlat:
                        i = 1
                        while (i <= noOfMiniScenes):
                            if localTrialNo[staircase][i] <= maxNoFlat:
                                currentScene = i
                            i = i + 1

        if currentScene == 1:
            images = images1
        elif currentScene == 2:
            images = images2
        elif currentScene == 3:
            images = images3
        print("Current local scene no is: " + str(currentScene))
        trial = localTrialNo[staircase][currentScene]
        print("Trial is: " + str(trial) + " " + str(staircase))

        if random() > 0.5:
            refSide = 1
        else:
            refSide = -1

        compSide = refSide * -1

        if trial == 1:
           levList[staircase][currentScene][trial] = initN
        elif trial == 2:
            levList[staircase][currentScene][trial] = initN-(initStep/2)*(kestList[staircase][currentScene][trial-1]-phi)
        else:
            levList[staircase][currentScene][trial] = levList[staircase][currentScene][trial-1]-(initStep/(reversals+2))*(kestList[staircase][currentScene][trial-1]-phi)

        print("Before quality level is: " + str(levList[staircase][currentScene][trial]))
        # bound range
        if staircase ==  0:
            if levList[staircase][currentScene][trial] > initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0
        elif staircase == 1:
            if levList[staircase][currentScene][trial] < initN:
                levList[staircase][currentScene][trial] = initN
            if levList[staircase][currentScene][trial] < 0:
                levList[staircase][currentScene][trial] = 0


        print("Current quality level is: " + str(levList[staircase][currentScene][trial]))

        nCompQuality = int(round(levList[staircase][currentScene][trial]))

        comp_num = nCompQuality

        if refSide == -1:
            leftImage = images[nRefImage]
            rightImage = images[comp_num]
        else:
            leftImage = images[comp_num]
            rightImage = images[nRefImage]
      End JS Routine:
        psychoJS.experiment.addData("Trial No.", trial);
        psychoJS.experiment.addData("Comp Side", (refSide * (- 1)));
        psychoJS.experiment.addData("Ref Num", nRefImage);
        psychoJS.experiment.addData("Level List", levList[staircase][currentScene][trial]);
        psychoJS.experiment.addData("Bounce Num", comp_num);
        psychoJS.experiment.addData("Staircase", staircase);
        psychoJS.experiment.addData("Scene No", currentScene);

        kestResp = 0;
        if (((compSide < 0) && (resp.keys === "left"))) {
            kestResp = 1;
        }
        else {
                if (((compSide > 0) && (resp.keys === "right")))
                {
                    kestResp = 1;
                }
            }

        //if(staircase == 0)
        //{
        //    if (((compSide < 0) && (resp.keys === "left"))) {
        //    kestResp = 1;
        //}
        //else {
        //        if (((compSide > 0) && (resp.keys === "right")))
        //        {
        //            kestResp = 1;
        //        }
        //    }
        //}
        //else
        //{
        //    if (((compSide > 0) && (resp.keys === "left"))) {
        //    kestResp = 1;
        //} else {
        //    if (((compSide < 0) && (resp.keys === "right"))) {
        //        kestResp = 1;
        //    }
        //}
        //}

        kestList[staircase][currentScene][trial] = kestResp;

        psychoJS.experiment.addData("comp>ref?", kestResp);
        if ((localTrialNo[staircase][currentScene] > 1)) {
            if ((kestList[staircase][currentScene][trial] !== kestList[staircase][currentScene][(trial - 1)])) {
                reversals += 1;
                reverseList[staircase][currentScene][reversals] = levList[staircase][currentScene][(trial - 1)];
            }
        }

        localTrialNo[staircase][currentScene] = (localTrialNo[staircase][currentScene] + 1);
        trialCounter = (trialCounter + 1);
      End Routine:
        # store level and response
        #respList.append(response)
        thisExp.addData('Trial No.', localTrialNo[staircase][currentScene])
        thisExp.addData('Comp Side', refSide * -1)
        thisExp.addData('Ref Num', nRefImage)
        thisExp.addData('Level List', levList[staircase][currentScene][trial])
        thisExp.addData('Bounce Num', comp_num)
        thisExp.addData('Staircase', staircase)
        thisExp.addData('Scene No', currentScene)

        kestResp = 0
        if compSide < 0 and resp.keys == 'left':
            kestResp = 1 # comp more realistic
        elif compSide > 0 and resp.keys == 'right':
            kestResp = 1 # comp more realisitic


        kestList[staircase][currentScene][trial] = kestResp
        thisExp.addData('comp>ref?', kestResp)

        # count reversals
        if localTrialNo[staircase][currentScene] > 1:
            if kestList[staircase][currentScene][trial] != kestList[staircase][currentScene][trial-1]:
                reversals += 1
                reverseList[staircase][currentScene][reversals] = levList[staircase][currentScene][trial-1]

        # increment trials
        localTrialNo[staircase][currentScene] += 1
        trialCounter = trialCounter + 1
    ImageComponent leftImagePortrait
      image [set every repeat] = $leftImage
      pos = (-0.5, 0)
      size = (0.99, 0.99)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent rightImagePortrait
      image [set every repeat] = $rightImage
      pos = (0.5, 0)
      size = (0.99, 0.99)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      text = Please record your answer. 
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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  Routine end
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating in this trial. 
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Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = imageConds3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageSetLvl', 1), ('imageSetName', 'barber'), ('refSetNumber', 7)]),
      OrderedDict([('imageSetLvl', 2), ('imageSetName', 'car'), ('refSetNumber', 4)])]
    Routine set_condition
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 60
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
  Routine end
